PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tSwitchTest1
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Routines
  Routine trial
    ImageComponent trialGrid
      image = grid4a.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent trialShape
      image [set every repeat] = $shapeStim
      pos [set every repeat] = (loc1, loc2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    CodeComponent trialCode
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN%4 == 0:
            loc1 = 0.12
            loc2 = 0.12
        elif trials.thisN%4 == 1:
            loc1 = 0.12
            loc2 = -0.12
        elif trials.thisN%4 == 2:
            loc1 = -0.12
            loc2 = -0.12
        elif trials.thisN%4 == 3:
            loc1 = -0.12
            loc2 = 0.12
        else:
            loc1 = -0.12
            loc2 = 0.12
    KeyboardComponent key_resp
      allowedKeys = 'space'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine setup
    CodeComponent setupCode
      Code Type = Auto->JS
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      Begin Experiment:
        loc1 = -0.12
        loc2 = 0.12
Flow
  Routine setup
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = tSwitchCond1.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('shapeStim', 'diamond2.png'), ('corrAns', 'space')]),
      OrderedDict([('shapeStim', 'diamond2.png'), ('corrAns', None)]),
      OrderedDict([('shapeStim', 'diamond2.png'), ('corrAns', 'space')]),
      OrderedDict([('shapeStim', 'diamond2.png'), ('corrAns', None)]),
      OrderedDict([('shapeStim', 'diamond2.png'), ('corrAns', 'space')]),
      OrderedDict([('shapeStim', 'diamond3.png'), ('corrAns', None)]),
      OrderedDict([('shapeStim', 'diamond3.png'), ('corrAns', 'space')]),
      OrderedDict([('shapeStim', 'diamond3.png'), ('corrAns', None)]),
      OrderedDict([('shapeStim', 'diamond3.png'), ('corrAns', 'space')]),
      OrderedDict([('shapeStim', 'diamond3.png'), ('corrAns', None)]),
      OrderedDict([('shapeStim', 'square2.png'), ('corrAns', 'space')]),
      OrderedDict([('shapeStim', 'square2.png'), ('corrAns', None)]),
      OrderedDict([('shapeStim', 'square2.png'), ('corrAns', 'space')]),
      OrderedDict([('shapeStim', 'square2.png'), ('corrAns', None)]),
      OrderedDict([('shapeStim', 'square2.png'), ('corrAns', 'space')]),
      OrderedDict([('shapeStim', 'square3.png'), ('corrAns', None)]),
      OrderedDict([('shapeStim', 'square3.png'), ('corrAns', 'space')]),
      OrderedDict([('shapeStim', 'square3.png'), ('corrAns', None)]),
      OrderedDict([('shapeStim', 'square3.png'), ('corrAns', 'space')]),
      OrderedDict([('shapeStim', 'square3.png'), ('corrAns', None)])]
    Routine trial
  LoopTerminator trials
